---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Tutorial: Gaze cuing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Christopher John/Desktop/Python/Abschlussarbeit"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background "#000000"

define inline_script Response
	set description "Executes Python code"
	___run__
	my_keyboard = keyboard(keylist=['y', 'm'], timeout=3000)
	start_time = clock.time()
	key, end_time = my_keyboard.get_key()
	var.response = key
	var.response_time = end_time - start_time
	__end__
	set _prepare ""

define sketchpad black_screen_1
	set duration 200
	set description "Präsentiert Stimuli"

define sketchpad black_screen_2
	set duration 200
	set description "Präsentiert Stimuli"

define sketchpad black_screen_3
	set duration 0
	set description "Präsentiert Stimuli"

define loop block_loop
	set source_file ""
	set source table
	set repeat 4
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 18
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 type chair
	setcycle 0 richtung_bild_links 1_left
	setcycle 0 richtung_bild_rechts 2_left
	setcycle 0 congruency 0
	setcycle 0 correct_response m
	setcycle 1 type chair
	setcycle 1 richtung_bild_links 1_left
	setcycle 1 richtung_bild_rechts 2_right
	setcycle 1 congruency 0
	setcycle 1 correct_response m
	setcycle 2 type chair
	setcycle 2 richtung_bild_links 1_right
	setcycle 2 richtung_bild_rechts 2_right
	setcycle 2 congruency 0
	setcycle 2 correct_response m
	setcycle 3 type chair
	setcycle 3 richtung_bild_links 1_right
	setcycle 3 richtung_bild_rechts 2_left
	setcycle 3 congruency 1
	setcycle 3 correct_response m
	setcycle 4 type chair
	setcycle 4 richtung_bild_links 2_left
	setcycle 4 richtung_bild_rechts 1_left
	setcycle 4 congruency 0
	setcycle 4 correct_response m
	setcycle 5 type chair
	setcycle 5 richtung_bild_links 2_left
	setcycle 5 richtung_bild_rechts 1_right
	setcycle 5 congruency 0
	setcycle 5 correct_response m
	setcycle 6 type chair
	setcycle 6 richtung_bild_links 2_right
	setcycle 6 richtung_bild_rechts 1_right
	setcycle 6 congruency 0
	setcycle 6 correct_response m
	setcycle 7 type chair
	setcycle 7 richtung_bild_links 2_right
	setcycle 7 richtung_bild_rechts 1_left
	setcycle 7 congruency 1
	setcycle 7 correct_response m
	setcycle 8 type face
	setcycle 8 richtung_bild_links 1_left
	setcycle 8 richtung_bild_rechts 2_left
	setcycle 8 congruency 0
	setcycle 8 correct_response y
	setcycle 9 type face
	setcycle 9 richtung_bild_links 1_left
	setcycle 9 richtung_bild_rechts 2_right
	setcycle 9 congruency 0
	setcycle 9 correct_response y
	setcycle 10 type face
	setcycle 10 richtung_bild_links 1_right
	setcycle 10 richtung_bild_rechts 2_right
	setcycle 10 congruency 0
	setcycle 10 correct_response y
	setcycle 11 type face
	setcycle 11 richtung_bild_links 1_right
	setcycle 11 richtung_bild_rechts 2_left
	setcycle 11 congruency 1
	setcycle 11 correct_response y
	setcycle 12 type face
	setcycle 12 richtung_bild_links 1_left
	setcycle 12 richtung_bild_rechts 2_left
	setcycle 12 congruency 0
	setcycle 12 correct_response y
	setcycle 13 type face
	setcycle 13 richtung_bild_links 1_right
	setcycle 13 richtung_bild_rechts 2_right
	setcycle 13 congruency 0
	setcycle 13 correct_response y
	setcycle 14 type face
	setcycle 14 richtung_bild_links 2_left
	setcycle 14 richtung_bild_rechts 1_left
	setcycle 14 congruency 0
	setcycle 14 correct_response y
	setcycle 15 type face
	setcycle 15 richtung_bild_links 2_left
	setcycle 15 richtung_bild_rechts 1_right
	setcycle 15 congruency 0
	setcycle 15 correct_response y
	setcycle 16 type face
	setcycle 16 richtung_bild_links 2_right
	setcycle 16 richtung_bild_rechts 1_left
	setcycle 16 congruency 1
	setcycle 16 correct_response y
	setcycle 17 type face
	setcycle 17 richtung_bild_links 2_right
	setcycle 17 richtung_bild_rechts 1_right
	setcycle 17 congruency 0
	setcycle 17 correct_response y
	run trial_sequence

define sketchpad end
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Ende des Experiments!<br /><br />Vielen Dank für Ihre Teilnahme.<br /><br />Drücken Sie eine beliebe Taste, um das Experiment zu beenden." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run instruction always
	run block_loop always
	run end always

define sketchpad fixation_dot
	set duration 745
	set description "Präsentiert Stimuli"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Lieber Teilnehmer,<br /><br />im Folgenden werden Sie einen Fixationspunkt, gefolgt von zwei Bildern sehen.<br /><br />Diese Bilder zeigen entweder zwei Gesichter oder zwei Stühle.<br /><br />Bitte geben Sie durch einen Tastendruck an, ob Sie Gesichter oder Stühle gesehen haben.<br /><br />Für Gesichter, drücken Sie 'Y'.<br />Für Stühle, drücken Sie 'M'.<br /><br />Die Blickrichtung ist hierbei irrelevant.<br /><br />Bitte antworten Sie so schnell und so genau wie möglich.<br /><br />Wenn Sie bereit sind, drücken Sie eine beliebige Taste, um das Experiment zu beginnen." x=0 y=0 z_index=0

define logger logger
	set description "Registriert experimentelle Daten"
	set auto_log yes

define sketchpad mask
	set duration 250
	set description "Präsentiert Stimuli"
	draw image center=1 file="maxresdefault (1).jpg" scale=0.5 show_if=always x=0 y=0 z_index=0

define inline_script target
	set description "Executes Python code"
	___run__
	import psychopy
	from psychopy import visual
	fname_links = exp.get_file(var.type+"_"+var.richtung_bild_links+".png")
	fname_rechts = exp.get_file(var.type+"_"+var.richtung_bild_rechts+".png")
	bild_links = psychopy.visual.ImageStim(win,fname_links, pos=(-300, 0))
	bild_links.draw()
	bild_rechts = psychopy.visual.ImageStim(win,fname_rechts, pos=(300, 0))
	bild_rechts.draw()
	win.flip()
	clock.sleep(20)
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run black_screen_1 always
	run fixation_dot always
	run black_screen_2 always
	run target always
	run mask always
	run black_screen_3 always
	run Response always
	run logger always

