---
API: 2
OpenSesame: 3.0.7
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Tutorial: Gaze cuing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/johannaschuller/Documents/Uni/Master/Erstes_Semester/Python/Pruefungsleistung"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background white

define inline_script Response
	set description "Executes Python code"
	___run__
	my_keyboard = keyboard(keylist=['z', 'm'], timeout=3000)
	start_time = clock.time()
	key, end_time = my_keyboard.get_key()
	var.response = key
	var.response_time = end_time - start_time
	__end__
	set _prepare ""

define inline_script Target_1
	set description "Executes Python code"
	___run__
	import psychopy
	from psychopy import visual
	fname_eins = exp.get_file(var.sex+"_"+var.blickr_eins+".png")
	fname_zwei = exp.get_file(var.sex+"_"+var.blickr_zwei+".png")
	bild_eins = psychopy.visual.ImageStim(win,fname_eins, pos=(-300, 0))
	bild_eins.draw()
	bild_zwei = psychopy.visual.ImageStim(win,fname_zwei, pos=(300, 0))
	bild_zwei.draw()
	win.flip()
	clock.sleep(30)
	__end__
	set _prepare ""

define loop block_loop
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item trial_sequence
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 8
	set continuous no
	set column_order "correct_response;sex;blickr_congruency;blickr_eins;blickr_zwei"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "m"
	setcycle 0 blickr_congruency "0"
	setcycle 0 blickr_zwei "links"
	setcycle 0 blickr_eins "links"
	setcycle 0 sex "Mann"
	setcycle 1 correct_response "m"
	setcycle 1 blickr_congruency "0"
	setcycle 1 blickr_zwei "rechts"
	setcycle 1 blickr_eins "links"
	setcycle 1 sex "Mann"
	setcycle 2 correct_response "m"
	setcycle 2 blickr_congruency "1"
	setcycle 2 blickr_zwei "links"
	setcycle 2 blickr_eins "rechts"
	setcycle 2 sex "Mann"
	setcycle 3 correct_response "m"
	setcycle 3 blickr_congruency "0"
	setcycle 3 blickr_zwei "rechts"
	setcycle 3 blickr_eins "rechts"
	setcycle 3 sex "Mann"
	setcycle 4 correct_response "z"
	setcycle 4 blickr_congruency "0"
	setcycle 4 blickr_zwei "links"
	setcycle 4 blickr_eins "links"
	setcycle 4 sex "Frau"
	setcycle 5 correct_response "z"
	setcycle 5 blickr_congruency "0"
	setcycle 5 blickr_zwei "rechts"
	setcycle 5 blickr_eins "links"
	setcycle 5 sex "Frau"
	setcycle 6 correct_response "z"
	setcycle 6 blickr_congruency "1"
	setcycle 6 blickr_zwei "links"
	setcycle 6 blickr_eins "rechts"
	setcycle 6 sex "Frau"
	setcycle 7 correct_response "z"
	setcycle 7 blickr_congruency "0"
	setcycle 7 blickr_zwei "rechts"
	setcycle 7 blickr_eins "rechts"
	setcycle 7 sex "Frau"
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run reset_feedback always
	run block_loop always

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run new_sketchpad_2 always
	run new_form_multiple_choice always
	run experimental_loop always
	run new_sketchpad_3 always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item block_sequence
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set column_order empty_column
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Gibt Versuchspersonen Feedback"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of block<br /><br />Your average response time was [avg_rt] ms<br />Your accuracy was [acc] %<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Präsentiert Stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script gaze_cue_1
	set description "Executes Python code"
	___run__
	import psychopy
	from psychopy import visual
	fname = exp.get_file(var.type+var.gaze_c+".png")
	stim = psychopy.visual.ImageStim(win,fname)
	stim.draw()
	win.flip()
	clock.sleep(745)
	__end__
	set _prepare ""

define inline_script gaze_neutral
	set description "Executes Python code"
	___run__
	import psychopy
	from psychopy import visual
	fname = exp.get_file('gaze_neutral.png')
	stim = psychopy.visual.ImageStim(win,fname)
	stim.draw()
	win.flip()
	clock.sleep(745)
	__end__
	set _prepare ""

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Spielt eine Audiodatei in .wav oder .ogg Format ab"

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	__form_text__
	Please look at the fixation dot in the middle of the screen.
	
	You will see either two pictures of a woman's face or of a Greeble.
	
	Independently of the viewing direction, plase rate if you can see a woman or a Greeble.
	
	For a woman, press 'y'
	For a Greeble, press 'm'
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses "y;m"

define logger logger
	set description "Registriert experimentelle Daten"
	set auto_log yes

define sketchpad neutral_gaze
	set duration 745
	set description "Präsentiert Stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Bitte geben Sie Ihr Geschlecht an."
	__options__
	Female
	Male
	__end__
	set margins "50;50;50;50"
	set form_var gender_subj
	set form_title Gender
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log form_var

define sketchpad new_sketchpad
	set duration 0
	set description "Präsentiert Stimuli"
	draw image center=1 file="maxresdefault (1).jpg" scale=0.4 show_if=always x=0 y=0 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Präsentiert Stimuli"

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Lieber Teilnehmer,<br /><br />im Folgenden werden Sie einen Fixationspunkt gefolgt von zwei Bildern sehen.<br /><br />Die Bilder zeigen entweder zwei Frauen oder zwei Männer.<br /><br />Bitte geben Sie durch Tastendruck an, ob es sich um Frauen oder Männer handelt.<br /><br />Für Frauen, drücken Sie 'y'.<br />Für Männer, drücken Sie 'm'.<br /><br />Die Blickrichtung ist hierbei irrelevant.<br /><br />Bitte antworten Sie so schnell und genau wie möglich.<br /><br />Zuvor werden Sie noch gebeten, Ihr Geschlecht anzugeben.<br /><br />Wenn Sie bereit sind, drücken Sie eine beliebige Taste, um das Experiment zu beginnen." x=0 y=0 z_index=0

define sketchpad new_sketchpad_3
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Ende des Experiments!<br /><br />Vielen Dank für die Teilnahme." x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item block_sequence
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad target
	set duration 0
	set description "Präsentiert Stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[target_letter]" x="[target_pos]" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x="[dist_pos]" y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run fixation_dot always
	run Target_1 always
	run new_sketchpad always
	run Response always
	run logger always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.1 <i>Jazzy James</i>" x=0 y=0 z_index=0

